PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cognitiveBiases
  keyboardBackend = ioHub
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Routines
  Routine ScenarioPresentation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Any text

        A wildfire is approaching a small town. Do you order an immediate evacuation or wait for further information from firefighters on the ground?
    KeyboardComponent key_resp
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      store = first key
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  Routine Ratings
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = How confident are you in your decision?
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    KeyboardComponent rating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/johan/Desktop/Kingston/PsychoPy/GithubRepo/BH7630-Research-methods-and-dissertation/PsychoPy/CognitiveBiases/conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('scenario_text', 'A wildfire is approaching a small town. Do you order an immediate evacuation or wait for further information from firefighters on the ground?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'A hurricane warning has been issued for a coastal city. Do you focus on reinforcing emergency shelters or prioritize evacuating residents from the most vulnerable areas?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'There has been a chemical spill at a local factory. Do you shelter-in-place or evacuate the surrounding neighborhoods?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'Intelligence reports indicate a potential terrorist threat at a major public event. Do you cancel the event or increase security measures and proceed as planned?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'There is an outbreak of a contagious disease in a nearby city. Do you impose travel restrictions and quarantine measures immediately or wait for further confirmation of the spread?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'Heavy rains have led to rising river levels, threatening to flood several residential areas. Do you issue an evacuation order or reinforce levees and monitor the situation?'), ('duration', 5)]),
      OrderedDict([('scenario_text', 'A moderate earthquake has just occurred with aftershocks expected. Do you initiate emergency response protocols immediately or wait for damage assessments?'), ('duration', 5)])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
    Routine ScenarioPresentation
  LoopTerminator trials
  Routine Ratings
