PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = MockGivern
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine Trial
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    PolygonComponent polygon
      fillColor = -0.3412, -0.8196, 1.0000
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = triangle
      size [set every repeat] = (0.5, 0.5)
      startEstim = $triggerStart == 1
      startVal [condition] = $startTime
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $float('inf')
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/johan/Desktop/Kingston/PsychoPy/conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('triggerStart', 1), ('startTime', 2)]),
      OrderedDict([('triggerStart', 1), ('startTime', 3)]),
      OrderedDict([('triggerStart', 1), ('startTime', 5)])]
    Routine Trial
  LoopTerminator trials
